CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:407
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the \x93Images\x94 module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders. For this example drop the nuclei image stack from the first round of sequencing.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['The \x93Metadata\x94 module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file. In this example \x93Metadata\x94 will not be used.']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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The \x93NamesAndTypes\x94 module allow to assign a meaningful name to each image by which other modules will refer to it. 3D images will be processed so \x93Yes\x94 is chosen to the right of \x93Process as 3D?\x94. The relative pixel spacing is found by opening the image in ImageJ Fiji, opening the \x93Image\x94 tab followed by \x93Show Info\x85\x94 . The voxel size can be seen in the image info description. ']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:1
    Relative pixel spacing in Y:1
    Relative pixel spacing in Z:4.62
    Select the rule criteria:or (file does contain "dapi")
    Name to assign these images:Nuclei
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['The \x93Groups\x94 module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc. This option is not needed in this example so \x93No\x94 is chosen.']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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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notes:['It is sometimes helpful to rescale images when processing them in CellProfiler. If the objects in question are relatively homogeneous within experiments but are very different experiment-to-experiment this standardizes the input in a way that makes processing images more reproducible and suppresses experimental variation and batch effects; however if your objects are relatively heterogeneous within a single experiment or you have areas with bright debris this is not recommended.  If rescaling in this fashion, a \x93RescaleIntensity\x94 module is needed for each channel. This module will rescale intensity of the nuclei image.']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
    Select the input image:Nuclei
    Name the output image:RescaleIntensityNuclei
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.004
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
Resize:[module_num:6|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notes:['Processing 3D images requires much more computation time than 2D images. Often, downsampling an image can yield large performance gains and at the same time smooth an image to remove noise. If the objects of interest are relatively large compared to the pixel size, then downsampling will only minimally affect the final segmentation. A value of 0.5 is chosen.  This module will resize the nuclei image.']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
    Select the input image:RescaleIntensityNuclei
    Name the output image:ResizeNuclei
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.5
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    Interpolation method:Nearest Neighbor
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    Select the image with the desired dimensions:RescaleIntensity
    Additional image count:0

EnhanceOrSuppressFeatures:[module_num:7|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notes:['This module is used to enhance the brightness of the nuclei relative to the background; here we enhance based on  \x93Speckles\x94. ']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
    Select the input image:ResizeNuclei
    Name the output image:EorSFeaturesNuclei
    Select the operation:Suppress
    Feature size:2
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
GaussianFilter:[module_num:8|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notes:['A Gaussian filter will reduce noise by blurring the image and is useful when the foreground signal is noisy. Ideal tuning at this step helps prevent oversegmentation but will not cause undersegmentation of the nuclei. Here a filter window size of 2 is chosen.']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
    Select the input image:EorSFeaturesNuclei
    Name the output image:GaussianFilter
    Sigma:2

Threshold:[module_num:9|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notes:['This step will separate the foreground (nuclei) from the background. Otsu method is chosen with Global threshold strategy.']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
    Select the input image:GaussianFilter
    Name the output image:ThresholdNuclei
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.1
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
Watershed:[module_num:10|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notes:['This module implements the watershed algorithm which will segment the nuclei.  Essentially this involves finding the center of the spheres we thresholded in the last step, looking for the pixels with the furthest distance from the edge, calling them \x93centers\x94, then expanding out from the centers until all thresholded pixels have been added to one object or another.  See http://scikit-image.org/docs/dev/auto_examples/segmentation/plot_watershed.html for more information.']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
    Select the input image:ThresholdNuclei
    Name the output object:WatershedNuclei
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:4
    Downsample:2
    Separate watershed labels:No

ConvertObjectsToImage:[module_num:11|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notes:["We'\x92ve successfuly segmented the nuclei!  Now we\x92ll segment the cells around each nucleus by using the nucleus as a \x93seed\x94 or \x93marker\x94 for the membrane around it.  This will involve 3 steps- 1) Preparing the nuclei for seeding 2) Defining the membrane boundary and 3) Removing the extra space at the edges and 4) Segmenting the cell as all pixels between the nucleus and the membrane.", '', 'This module is Step 1- itconverts the segmented nuclei we\x92ve produced to a uint16 image. This image will be used in the \x93Watershed\x94 module to segment cells by using nuclei as seeds later in the pipeline.']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
    Select the input objects:WatershedNuclei
    Name the output image:NucleiMarkers
    Select the color format:uint16
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
ResizeObjects:[module_num:12|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notes:['To decrease image processing time the original nuclei image was resized in the beginning of the pipeline. To account for this size adjustment the segmented nuclei image will be resized back to the same size as the original image.']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
    Select the input object:WatershedNuclei
    Name the output object:ResizeObjectsWatershedNuclei
    Method:Factor
    Factor:2
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
ConvertObjectsToImage:[module_num:13|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
    Select the input objects:ResizeObjectsWatershedNuclei
    Name the output image:ResizeObjectsWatershedNucleiImage
    Select the color format:uint16
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
SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:ResizeObjectsWatershedNucleiImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:Nuclei
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_testis_FOV1_segmentedNuclei_5_ws
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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